WorkflowBuilder(Version=2.9.1)
ExternalizedMapping(StopWorkflowOnClose) => #0
ExternalizedMapping(ConfigFilePath) => #1
#0, #1 -> GroupWorkflow "Initialize Subjects"
    OpenEphys.MiniscopeV4.Gui.CreateMiniscopeLog
    -> BehaviorSubject MiniscopeLog

    OpenEphys.MiniscopeV4.Gui.CreateGuiLayout
    -> BehaviorSubject GuiLayout

    OpenEphys.MiniscopeV4.Gui.CameraStatus(AcquisitionRequested=false, Paused=false, CameraIndex=0)
    -> BehaviorSubject CameraStatus

    OpenEphys.MiniscopeV4.Gui.MiniscopeSettings(LedBrightness=0, Focus=0, SensorGain=Low, FrameRate=Fps30, LedRespectsDigitalIn=None)
    -> BehaviorSubject MiniscopeSettings

    OpenEphys.MiniscopeV4.Gui.CommutatorSettings(ConnectionRequested=false, PortName="", Enable=true, EnableLed=true, AutoConnect=false)
    -> BehaviorSubject CommutatorSettings

    PropertySource<OpenEphys.MiniscopeV4.Gui.SaturationSettings,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=100, Val3=0))
    -> PropertyMapping(Color)
    -> OpenEphys.MiniscopeV4.Gui.SaturationSettings(Threshold=192)
    -> PropertyMapping(Saturation) => #13
    OpenEphys.MiniscopeV4.Gui.DffSettings(BackgroundFrames=100, BackgroundThreshold=92, Sigma=3)
    -> PropertyMapping(Dff) => #15
    PropertySource<OpenEphys.MiniscopeV4.Gui.SaturationSettings,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=255, Val2=0, Val3=0))
    -> PropertyMapping(ReferenceColor) => #17
    PropertySource<OpenEphys.MiniscopeV4.Gui.SaturationSettings,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=255, Val1=0, Val2=0, Val3=0))
    -> PropertyMapping(LiveColor) => #19
    #17, #19 -> OpenEphys.MiniscopeV4.Gui.OverlaySettings(CaptureRequested=false, ApplyOverlay=false, ReferencePath="")
    -> PropertyMapping(Overlay) => #21
    #13, #15, #21 -> OpenEphys.MiniscopeV4.Gui.DataDisplaySettings
    -> BehaviorSubject DataDisplaySettings

    OpenEphys.MiniscopeV4.Gui.FileSettings
      RecordingRequested=false
      RecordingMode=Manual
      CompressVideo=false
      FileName=""
      Suffix=FileCount
      RecordingDuration=600
      TotalDuration=3600
      SegmentMode=SingleFile
      TriggerInput=DigitalIn0
    -> BehaviorSubject FileSettings

    BooleanProperty(Value=false)
    -> BehaviorSubject IsRecording

    StringProperty
    -> BehaviorSubject MiniscopeError

    StringProperty
    -> BehaviorSubject RecordingError

    IntProperty(Value=0)
    -> BehaviorSubject DroppedFrames

    ExternalizedMapping(Value(DisplayName=StopWorkflowOnClose, Category=Workflow))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject StopWorkflowOnClose

    PropertySource<OpenEphys.MiniscopeV4.Gui.DataPanel,OpenEphys.MiniscopeV4.Gui.ImageTab>(MemberName=ImageTab, Value=Raw)
    -> BehaviorSubject ImageTab

    ExternalizedMapping(ConfigFilePath)
    -> OpenEphys.MiniscopeV4.Gui.ConfigurationRequest(RequestType=AutoLoad, ConfigFilePath=../../launcher/default_miniscopev4_config.yml)
    -> BehaviorSubject ConfigRequest

    BooleanProperty(Value=false)
    -> BehaviorSubject IsTotalDurationFinished

    IntProperty(Value=0)
    -> BehaviorSubject TotalTimeRemaining

    BooleanProperty(Value=false)
    -> BehaviorSubject IsAcquiring

    BooleanProperty(Value=false)
    -> BehaviorSubject CommutatorConnected

    StringProperty
    -> BehaviorSubject CommutatorError

    BehaviorSubject<OpenEphys.Miniscope.UclaMiniscopeV4Frame> MiniscopeV4Frame
GroupWorkflow "Data Acquisition" => #3
    SubscribeSubject CameraStatus
    -> MemberSelector(Selector=AcquisitionRequested)
    -> ObserveOn(Scheduler=TaskPoolScheduler)
    -> DistinctUntilChanged
    -> Condition IsTrue
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> StringProperty
    -> MulticastSubject MiniscopeError
    -> BooleanProperty(Value=true)
    -> MulticastSubject IsAcquiring => #9
    SubscribeSubject CameraStatus
    -> MemberSelector(Selector=CameraIndex)
    -> DistinctUntilChanged
    -> PropertyMapping(Index) => #13
    #9, #13 -> SelectMany
        WorkflowInput Source1
        -> StringProperty(Value="Starting acquisition.") => #1
        SubscribeSubject MiniscopeLog => #2
        #1, #2 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

        GroupWorkflow "Calculate Dropped Frames"
            SubscribeSubject MiniscopeV4Frame
            -> Skip(Count=1)
            -> MemberSelector(Selector=FrameNumber) => #2
            -> Skip(Count=1) => #3
            #2, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 - it.Item1 - 1
            -> Accumulate
            -> DistinctUntilChanged
            -> MulticastSubject DroppedFrames

        ExternalizedMapping(Index) => #6
        SubscribeSubject MiniscopeSettings => #7
        -> MemberSelector(Selector=LedBrightness)
        -> PropertyMapping(LedBrightness) => #9
        #7 -> MemberSelector(Selector=Focus)
        -> PropertyMapping(Focus) => #11
        #7 -> MemberSelector(Selector=SensorGain)
        -> PropertyMapping(SensorGain) => #13
        #7 -> MemberSelector(Selector=FrameRate)
        -> PropertyMapping(FramesPerSecond) => #15
        #7 -> MemberSelector(Selector=LedRespectsDigitalIn)
        -> PropertyMapping(LedRespectsDigitalIn) => #17
        #6, #9, #11, #13, #15, #17 -> OpenEphys.Miniscope.UclaMiniscopeV4(Index=0, LedBrightness=0, Focus=0, SensorGain=Low, FramesPerSecond=Fps30, LedRespectsDigitalIn=None) => #18
        SubscribeSubject IsAcquiring
        -> DistinctUntilChanged
        -> Condition IsFalse => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        SubscribeSubject MiniscopeError
        -> DistinctUntilChanged
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !string.IsNullOrEmpty(it)
        -> Condition True => #25
            WorkflowInput Source1
            -> WorkflowOutput
        #21, #25 -> Merge => #26
        #18, #26 -> TakeUntil
        -> Materialize => #28
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #28 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject MiniscopeError
    -> Repeat
    -> MulticastSubject MiniscopeV4Frame
    -> WorkflowOutput

    GroupWorkflow "Reset Dropped Frames"
        SubscribeSubject IsAcquiring
        -> DistinctUntilChanged
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=0)
        -> MulticastSubject DroppedFrames

    GroupWorkflow ResetAcquiringOnError
        SubscribeSubject MiniscopeError
        -> DistinctUntilChanged
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !string.IsNullOrEmpty(it)
        -> GroupWorkflow ResetRequest
            WorkflowInput Source1 => #0
            BooleanProperty(Value=false)
            -> PropertyMapping(AcquisitionRequested) => #2
            SubscribeSubject CameraStatus => #3
            -> MemberSelector(Selector=Paused)
            -> DistinctUntilChanged
            -> PropertyMapping(Paused) => #6
            #3 -> MemberSelector(Selector=CameraIndex)
            -> DistinctUntilChanged
            -> PropertyMapping(CameraIndex) => #9
            #0, #2, #6, #9 -> OpenEphys.MiniscopeV4.Gui.CameraStatus(AcquisitionRequested=false, Paused=false, CameraIndex=0)
            -> MulticastSubject CameraStatus
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject IsAcquiring

    GroupWorkflow UpdateLogFrameNumber
        SubscribeSubject MiniscopeV4Frame
        -> MemberSelector(Selector=FrameNumber) => #1
        SubscribeSubject MiniscopeLog => #2
        #1, #2 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.UpdateLogFrameNumber
        -> WorkflowOutput

    GroupWorkflow ButtonStop
        SubscribeSubject CameraStatus
        -> MemberSelector(Selector=AcquisitionRequested)
        -> Condition IsFalse
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> MulticastSubject IsAcquiring

    GroupWorkflow "Log Stop Acquisition"
        SubscribeSubject IsAcquiring
        -> DistinctUntilChanged
        -> Skip(Count=1)
        -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value="Stopping acquisition.") => #4
        SubscribeSubject MiniscopeLog => #5
        #4, #5 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

    GroupWorkflow "Calculate Average Frame Rate"
        SubscribeSubject MiniscopeV4Frame
        -> MemberSelector(Selector=HardwareTime)
        -> BufferTime(TimeSpan=PT2S, TimeShift=PT0.1S) => #2
        SubscribeSubject IsAcquiring => #3
        #2, #3 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it.Item1.Count > 1) && it.Item2 ? (it.Item1.Count - 1 )* 1e3 / (it.Item1[it.Item1.Count - 1] - it.Item1[0]) : 0.0
        -> PublishSubject AverageFrameRate
OpenEphys.MiniscopeV4.Gui.MiniscopeVisualizerClosed => #4
#4, #1 -> GroupWorkflow SaveConfigOnClose
    WorkflowInput Source1 => #0
    -> WorkflowOutput
    ExternalizedMapping(RequestType, ConfigFilePath) => #2
    #2, #0 -> OpenEphys.MiniscopeV4.Gui.ConfigurationRequest(RequestType=AutoSave, ConfigFilePath=../../launcher/default_miniscopev4_config.yml)
    -> MulticastSubject ConfigRequest
-> Condition StopOnWorkflowClose => #6
    SubscribeSubject StopWorkflowOnClose
    -> WorkflowOutput
#3, #6 -> TakeUntil
-> WorkflowOutput

GroupWorkflow LoadConfigSettings
    SubscribeSubject ConfigRequest => #0
    SubscribeSubject MiniscopeLog => #1
    #0, #1 -> OpenEphys.MiniscopeV4.Gui.LoadConfiguration
    -> Materialize => #3
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it.Exception == null
    -> Dematerialize
    -> Catch => #6
    -> GroupWorkflow UpdateStatus
        WorkflowInput Source1
        -> MemberSelector(Selector=Camera) => #1
        -> GroupWorkflow "Not Connected"
            WorkflowInput Source1 => #0
            SubscribeSubject IsAcquiring => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=CameraIndex)
        -> PublishSubject UpdateIndex => #4
        SubscribeSubject UpdateIndex
        -> PropertyMapping(CameraIndex) => #6
        #4, #6 -> OpenEphys.MiniscopeV4.Gui.CameraStatus(AcquisitionRequested=false, Paused=false, CameraIndex=0)
        -> MulticastSubject CameraStatus
        -> WorkflowOutput
        #1 -> GroupWorkflow Connected => #10
            WorkflowInput Source1 => #0
            SubscribeSubject IsAcquiring => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        SubscribeSubject CameraStatus
        -> MemberSelector(Selector=CameraIndex) => #12
        #10, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionCondition DifferentIndices
          Expression: it.Item1.CameraIndex != it.Item2
        -> StringProperty(Value="Cannot update camera index while connected to a camera. Stop acquisition and try to import settings again.") => #15
        SubscribeSubject MiniscopeLog => #16
        #15, #16 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogWarning
    #6 -> GroupWorkflow UpdateHardwareSettings
        WorkflowInput Source1
        -> MemberSelector(Selector=Hardware) => #1
        -> MemberSelector(Selector=Miniscope)
        -> MulticastSubject MiniscopeSettings
        #1 -> MemberSelector(Selector=Commutator) => #4
        -> GroupWorkflow CommutatorNotConnected => #5
            WorkflowInput Source1 => #0
            SubscribeSubject CommutatorConnected => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #4 -> GroupWorkflow CommutatorConnected => #6
            WorkflowInput Source1 => #0
            SubscribeSubject CommutatorConnected => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        SubscribeSubject CommutatorSettings
        -> MemberSelector(Selector=PortName) => #8
        #6, #8 -> WithLatestFrom => #9
        -> Bonsai.Scripting.Expressions.ExpressionCondition SamePorts
          Expression: it.Item1.PortName == it.Item2
        -> MemberSelector(Selector=Item1) => #11
        #5, #11 -> Merge
        -> GroupWorkflow UpdateCommutatorSettings
            WorkflowInput Source1
            -> PublishSubject UpdateCommutator => #1
            SubscribeSubject UpdateCommutator => #2
            -> MemberSelector(Selector=PortName)
            -> PropertyMapping(PortName) => #4
            #2 -> MemberSelector(Selector=Enable)
            -> PropertyMapping(Enable) => #6
            #2 -> MemberSelector(Selector=EnableLed)
            -> PropertyMapping(EnableLed) => #8
            #2 -> MemberSelector(Selector=AutoConnect)
            -> PropertyMapping(AutoConnect) => #10
            #2 -> MemberSelector(Selector=ConnectionRequested)
            -> PropertyMapping(ConnectionRequested) => #12
            #1, #4, #6, #8, #10, #12 -> OpenEphys.MiniscopeV4.Gui.CommutatorSettings(ConnectionRequested=false, PortName="", Enable=true, EnableLed=true, AutoConnect=false)
            -> MulticastSubject CommutatorSettings
            -> WorkflowOutput
        #9 -> Bonsai.Scripting.Expressions.ExpressionCondition DifferentPorts
          Expression: it.Item1.PortName != it.Item2
        -> StringProperty(Value="Cannot update COM port while connected to a commutator. Disconnect and try to import settings again.") => #15
        SubscribeSubject MiniscopeLog => #16
        #15, #16 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogWarning
    #6 -> GroupWorkflow UpdateDataDisplaySettings
        WorkflowInput Source1
        -> MemberSelector(Selector=Display)
        -> MulticastSubject DataDisplaySettings
        -> WorkflowOutput
    #6 -> GroupWorkflow UpdateFileSettings
        WorkflowInput Source1
        -> MemberSelector(Selector=File) => #1
        -> GroupWorkflow IsNotRecording
            WorkflowInput Source1 => #0
            SubscribeSubject IsRecording => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MulticastSubject FileSettings
        -> WorkflowOutput
        #1 -> GroupWorkflow IsRecording
            WorkflowInput Source1 => #0
            SubscribeSubject IsRecording => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> StringProperty(Value="Cannot update file settings while recording data. Stop recording and try to import settings again.") => #6
        SubscribeSubject MiniscopeLog => #7
        #6, #7 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogWarning
    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it.Exception != null
    -> Format => #12
      Format:
        Could not load configuration settings. Using default settings.
        {0}
      Selector=Exception.Message
    SubscribeSubject MiniscopeLog => #13
    #12, #13 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.LogWarning

GroupWorkflow SaveConfigSettings
    SubscribeSubject ConfigRequest
    -> PublishSubject GenerateHardwareSettings
    -> PublishSubject GenerateMiniscopeConfiguration => #2
    SubscribeSubject GenerateMiniscopeConfiguration => #3
    SubscribeSubject GenerateHardwareSettings => #4
    SubscribeSubject MiniscopeSettings
    -> PropertyMapping(Miniscope) => #6
    SubscribeSubject CommutatorSettings
    -> PropertyMapping(Commutator) => #8
    #4, #6, #8 -> OpenEphys.MiniscopeV4.Gui.HardwareSettings
    -> PropertyMapping(Hardware) => #10
    SubscribeSubject CameraStatus
    -> PropertyMapping(Camera) => #12
    SubscribeSubject DataDisplaySettings
    -> PropertyMapping(Display) => #14
    SubscribeSubject FileSettings
    -> PropertyMapping(File) => #16
    #3, #10, #12, #14, #16 -> OpenEphys.MiniscopeV4.Gui.MiniscopeConfiguration => #17
    #2, #17 -> WithLatestFrom => #18
    SubscribeSubject MiniscopeLog => #19
    #18, #19 -> OpenEphys.MiniscopeV4.Gui.SaveConfiguration

GroupWorkflow "Display UI"
    OpenEphys.MiniscopeV4.Gui.ImGuiMiniscopeVisualizerBuilder => #0
    -> PublishSubject ImageTick
    -> Condition "Not Paused"
        SubscribeSubject CameraStatus
        -> MemberSelector(Selector=Paused)
        -> BitwiseNot
        -> WorkflowOutput
    -> PublishSubject DisplayTick
    #0 -> Bonsai.Design.VisualizerWindow(Text="Open Ephys Miniscope V4 GUI", Visible=true, Location(X=400, Y=100), Size(Width=1100, Height=900), WindowState=Normal)

    SubscribeSubject ImageTick
    -> GroupWorkflow StatusBar
        WorkflowInput Source1 => #0
        SubscribeSubject GuiLayout => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject IsAcquiring => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject IsRecording
        -> PropertyMapping(RecordingStatus) => #7
        SubscribeSubject AutoRestartTriggered
        -> PropertyMapping(AutomaticRestartTriggered) => #9
        SubscribeSubject CommutatorSettings
        -> PropertyMapping(CommutatorSettings) => #11
        SubscribeSubject CameraStatus
        -> PropertyMapping(CameraStatus) => #13
        #5, #7, #9, #11, #13 -> OpenEphys.MiniscopeV4.Gui.StatusBar => #14
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #14 -> MemberSelector(Selector=Item2)
        -> DistinctUntilChanged
        -> MulticastSubject CameraStatus
    -> GroupWorkflow "Plot Settings"
        WorkflowInput Source1 => #0
        SubscribeSubject CommutatorConnected => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject MiniscopeLog => #3
        SubscribeSubject IsAcquiring
        -> PropertyMapping(AcquisitionStatus) => #5
        SubscribeSubject IsRecording
        -> PropertyMapping(RecordingStatus) => #7
        SubscribeSubject MiniscopeSettings
        -> DistinctUntilChanged
        -> BooleanProperty(Value=true) => #10
        SubscribeSubject CommutatorSettings
        -> DistinctUntilChanged
        -> BooleanProperty(Value=true) => #13
        #10, #13 -> Merge
        -> PublishSubject UpdateHardwareSettings => #15
        SubscribeSubject MiniscopeSettings
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame UpdateHardwareSettings
        -> PropertyMapping(Miniscope) => #18
        SubscribeSubject CommutatorSettings
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame UpdateHardwareSettings
        -> PropertyMapping(Commutator) => #21
        #15, #18, #21 -> OpenEphys.MiniscopeV4.Gui.HardwareSettings
        -> PropertyMapping(HardwareSettings) => #23
        #2, #3, #5, #7, #23 -> OpenEphys.MiniscopeV4.Gui.SettingsPanel => #24
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #24 -> MemberSelector(Selector=Item2) => #27
        -> MemberSelector(Selector=Miniscope)
        -> DistinctUntilChanged
        -> MulticastSubject MiniscopeSettings
        #27 -> MemberSelector(Selector=Commutator)
        -> DistinctUntilChanged
        -> MulticastSubject CommutatorSettings
        #24 -> MemberSelector(Selector=Item3)
        -> DistinctUntilChanged
        -> MulticastSubject ConfigRequest

        GroupWorkflow "Log Commutator Status"
            SubscribeSubject CommutatorConnected
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it ? "Commutator connected" : "Commutator disconnected"
            SubscribeSubject MiniscopeLog => #4
            #3, #4 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
    -> GroupWorkflow File
        WorkflowInput Source1 => #0
        SubscribeSubject IsRecording => #1
        #0, #1 -> WithLatestFrom => #2
        SubscribeSubject IsAcquiring
        -> PropertyMapping(AcquisitionStatus) => #4
        SubscribeSubject FileSettings
        -> PropertyMapping(FileSettings) => #6
        SubscribeSubject IsTotalDurationFinished
        -> PropertyMapping(IsTotalDurationFinished) => #8
        SubscribeSubject RecordingError
        -> PropertyMapping(RecordingError) => #10
        #2, #4, #6, #8, #10 -> OpenEphys.MiniscopeV4.Gui.FilePanel => #11
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #11 -> MemberSelector(Selector=Item2)
        -> DistinctUntilChanged
        -> MulticastSubject FileSettings

        GroupWorkflow "Set Total Time"
            SubscribeSubject FileSettings
            -> DistinctUntilChanged
            -> Condition RecordingRequested
                WorkflowInput Source1
                -> MemberSelector(Selector=RecordingRequested)
                -> WorkflowOutput
            -> Condition IsSegmentedMode
                WorkflowInput Source1
                -> MemberSelector(Selector=RecordingMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> Condition TotalDurationIsTrue => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=SegmentMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
                -> WorkflowOutput
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=TotalDuration)
            -> DistinctUntilChanged
            -> PropertyMapping(Value) => #8
            #4, #8 -> IntProperty(Value=3600)
            -> MulticastSubject TotalTimeRemaining
    -> GroupWorkflow "Plot Data"
        WorkflowInput Source1
        -> GroupWorkflow "Render Data Panel" => #1
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeV4Frame
            -> MemberSelector(Selector=Image)
            -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #3
            -> GroupWorkflow RawImage => #4
                BehaviorSubject<OpenCV.Net.IplImage> CachedRawImage

                WorkflowInput Source1 => #1
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #2
                GroupWorkflow EmitCachedImage => #3
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject CameraStatus
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition RawTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Raw))
                        -> WorkflowOutput
                    SubscribeSubject CachedRawImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #2, #3 -> Merge
                -> Condition RawTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Raw))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #1 -> GroupWorkflow CacheRawImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedRawImage
                    -> WorkflowOutput
            #3 -> GroupWorkflow DffImage => #5
                BehaviorSubject<OpenCV.Net.IplImage> CachedDffImage

                WorkflowInput Source1
                -> GroupWorkflow "Calculate DeltaFOverF" => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplaySettings
                    -> MemberSelector(Selector=Dff) => #2
                    -> MemberSelector(Selector=BackgroundFrames)
                    -> PropertyMapping(BackgroundFrames) => #4
                    #2 -> MemberSelector(Selector=BackgroundThreshold)
                    -> PropertyMapping(BackgroundThreshold) => #6
                    #2 -> MemberSelector(Selector=Sigma)
                    -> PropertyMapping(Sigma) => #8
                    #0, #4, #6, #8 -> OpenEphys.Miniscope.DeltaFOverF(BackgroundFrames=100, BackgroundThreshold=92, Sigma=3)
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject CameraStatus
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition DffTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Dff))
                        -> WorkflowOutput
                    SubscribeSubject CachedDffImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition DffTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Dff))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedDffImage
                    -> WorkflowOutput
            #3 -> GroupWorkflow SaturationImage => #6
                BehaviorSubject<OpenCV.Net.IplImage> CachedSaturationImage

                WorkflowInput Source1
                -> GroupWorkflow CalculateDisplaySaturation => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplaySettings
                    -> MemberSelector(Selector=Saturation) => #2
                    -> MemberSelector(Selector=Threshold)
                    -> PropertyMapping(ThresholdValue) => #4
                    #0, #4 -> Bonsai.Vision.Threshold(ThresholdValue=160, MaxValue=255, ThresholdType=Binary) => #5
                    -> MemberSelector(Selector=Size)
                    -> PropertyMapping(Size) => #7
                    #2 -> MemberSelector(Selector=Color)
                    -> PropertyMapping(Color) => #9
                    #5, #7, #9 -> Bonsai.Vision.SolidColor(Size(Width=608, Height=608), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=100, Val3=0)) => #10
                    #10, #5 -> Zip
                    -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=0, Val3=1)) => #12
                    #0, #4 -> Bonsai.Vision.Threshold(ThresholdValue=160, MaxValue=255, ThresholdType=ToZeroInv) => #13
                    #12, #13 -> Zip
                    -> Add
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject CameraStatus
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition SaturationTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Saturation))
                        -> WorkflowOutput
                    SubscribeSubject CachedSaturationImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition SaturationTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Saturation))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheSaturationImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedSaturationImage
                    -> WorkflowOutput
            #3 -> GroupWorkflow MaxProjectionImage => #7
                BehaviorSubject<OpenCV.Net.IplImage> CachedMaxProjectionImage

                WorkflowInput Source1
                -> GroupWorkflow MaxProjection => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplaySettings
                    -> MemberSelector(Selector=MaxProjection) => #2
                    SubscribeSubject IsAcquiring
                    -> Condition IsTrue
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> PublishSubject ResetMaxProjection => #6
                    SubscribeSubject ResetMaxProjection
                    -> PropertyMapping(ResetRequested) => #8
                    #6, #8 -> OpenEphys.MiniscopeV4.Gui.MaxProjectionSettings(ResetRequested=true) => #9
                    #2, #9 -> Merge => #10
                    #0, #10 -> OpenEphys.MiniscopeV4.Gui.CalculateMaxProjection
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject CameraStatus
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition MaxProjectionTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=MaxProjection))
                        -> WorkflowOutput
                    SubscribeSubject CachedMaxProjectionImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition MaxProjectionTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=MaxProjection))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedMaxProjectionImage
                    -> WorkflowOutput
            #3 -> GroupWorkflow OverlayImage => #8
                BehaviorSubject<OpenCV.Net.IplImage> CachedOverlayImage

                WorkflowInput Source1
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick
                -> GroupWorkflow Overlay => #3
                    WorkflowInput Source1 => #0
                    SubscribeSubject DataDisplaySettings
                    -> MemberSelector(Selector=Overlay) => #2
                    #0, #2 -> WithLatestFrom => #3
                    SubscribeSubject MiniscopeLog => #4
                    #3, #4 -> OpenEphys.MiniscopeV4.Gui.OverlayReference
                    -> WorkflowOutput
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject CameraStatus
                        -> MemberSelector(Selector=Paused)
                        -> WorkflowOutput
                    -> Condition OverlayTab => #3
                        WorkflowInput Source1 => #0
                        SubscribeSubject ImageTab => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Overlay))
                        -> WorkflowOutput
                    SubscribeSubject CachedOverlayImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition OverlayTab
                    WorkflowInput Source1 => #0
                    SubscribeSubject ImageTab => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Overlay))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #3 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedOverlayImage
                    -> WorkflowOutput
            #4, #5, #6, #7, #8 -> Merge
            -> PropertyMapping(ActiveImage) => #10
            #3 -> MemberSelector(Selector=Size)
            -> DistinctUntilChanged => #12
            -> MemberSelector(Selector=Height)
            -> PropertyMapping(ImageHeight) => #14
            #12 -> MemberSelector(Selector=Width)
            -> PropertyMapping(ImageWidth) => #16
            #3 -> Bonsai.Vision.ImageHistogram
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(ImageHistogram) => #19
            SubscribeSubject IsAcquiring
            -> DistinctUntilChanged
            -> Condition IsTrue => #22
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject DataDisplaySettings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(Capacity) => #25
            #22, #25 -> SelectMany
                SubscribeSubject MiniscopeV4Frame
                -> MemberSelector(Selector=Quaternion)
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #2
                ExternalizedMapping(Capacity) => #3
                #2, #3 -> OpenEphys.MiniscopeV4.Gui.CircularBufferBuilder(Capacity=1800, ValueSelector="X,Y,Z,W") => #4
                SubscribeSubject IsAcquiring
                -> Condition => #6
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #4, #6 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(QuaternionSeries) => #28
            #25, #22 -> SelectMany
                SubscribeSubject MiniscopeV4Frame
                -> MemberSelector(Selector=DigitalIn)
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #2
                -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #3
                #2 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #4
                #3, #4 -> Zip => #5
                ExternalizedMapping(Capacity) => #6
                #5, #6 -> OpenEphys.MiniscopeV4.Gui.CircularBufferBuilder(Capacity=1800, ValueSelector="Item1,Item2") => #7
                SubscribeSubject IsAcquiring
                -> Condition => #9
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #7, #9 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(DigitalInSeries) => #31
            #22, #25 -> SelectMany
                SubscribeSubject MiniscopeV4Frame
                -> MemberSelector(Selector=Quaternion)
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> OpenEphys.Miniscope.QuaternionToEuler => #3
                ExternalizedMapping(Capacity) => #4
                #3, #4 -> OpenEphys.MiniscopeV4.Gui.CircularBufferBuilder(Capacity=1800, ValueSelector="Yaw,Pitch,Roll") => #5
                SubscribeSubject IsAcquiring
                -> Condition => #7
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #5, #7 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(EulerAnglesSeries) => #34
            SubscribeSubject IsAcquiring
            -> PropertyMapping(AcquisitionStatus) => #36
            SubscribeSubject AverageFrameRate
            -> PropertyMapping(AverageFrameRate) => #38
            SubscribeSubject MiniscopeV4Frame
            -> MemberSelector(Selector=FrameNumber)
            -> PropertyMapping(FrameNumber) => #41
            SubscribeSubject DroppedFrames
            -> PropertyMapping(DroppedFrames) => #43
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=FileName)
            -> PropertyMapping(DataPath) => #46
            SubscribeSubject MiniscopeSettings
            -> MemberSelector(Selector=FrameRate)
            -> PropertyMapping(SelectedFrameRate) => #49
            SubscribeSubject CameraStatus
            -> MemberSelector(Selector=Paused)
            -> PropertyMapping(Paused) => #52
            SubscribeSubject DataDisplaySettings
            -> PropertyMapping(DataDisplaySettings) => #54
            #0, #10, #14, #16, #19, #28, #31, #34, #36, #38, #41, #43, #46, #49, #52, #54 -> OpenEphys.MiniscopeV4.Gui.DataPanel(ImageHeight=608, ImageWidth=608)
            -> WorkflowOutput

            SubscribeSubject CameraStatus
            -> MemberSelector(Selector=Paused)
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PublishSubject SnapshotTick
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #1 -> MemberSelector(Selector=Item2)
        -> DistinctUntilChanged
        -> MulticastSubject DataDisplaySettings
        #1 -> MemberSelector(Selector=Item3)
        -> DistinctUntilChanged
        -> MulticastSubject ImageTab

        GroupWorkflow "Capture Current Image"
            SubscribeSubject DataDisplaySettings
            -> MemberSelector(Selector=Overlay)
            -> GroupWorkflow Acquiring
                WorkflowInput Source1 => #0
                SubscribeSubject IsAcquiring => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it.Item2
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> MemberSelector(Selector=CaptureRequested)
            -> Condition CaptureRequested => #4
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject MiniscopeV4Frame => #5
            #4, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #7
            SubscribeSubject MiniscopeLog => #8
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=FileName)
            -> PropertyMapping(FileDataPath) => #11
            #7, #8, #11 -> OpenEphys.MiniscopeV4.Gui.CaptureCurrentImage
    -> GroupWorkflow Console
        WorkflowInput Source1 => #0
        SubscribeSubject MiniscopeLog => #1
        #0, #1 -> OpenEphys.MiniscopeV4.Gui.ConsolePanel
        -> WorkflowOutput
    -> MulticastSubject GuiLayout

    GroupWorkflow "Log Property Changes"
        ExternalizedMapping(DueTime) => #0
        SubscribeSubject MiniscopeSettings => #1
        -> MemberSelector(Selector=Focus) => #2
        #0, #2 -> GroupWorkflow Focus
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            ExternalizedMapping(DueTime) => #2
            #0, #1, #2 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0.05S, Format="Focus: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=LedBrightness) => #4
        #0, #4 -> GroupWorkflow LedBrightness
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            SubscribeSubject MiniscopeLog => #2
            Source1=#0, Source2=#1, Source2=#2 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0.05S, Format="LED Brightness: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=FrameRate)
        -> GroupWorkflow FrameRate
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="Frame Rate: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=SensorGain)
        -> GroupWorkflow SensorGain
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="Sensor Gain: {0}", Selector=it)
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=LedRespectsDigitalIn)
        -> GroupWorkflow LedRespectsDigitalIn
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="LED Respects Digital In: {0}", Selector=it)
            -> WorkflowOutput

        SubscribeSubject CameraStatus
        -> MemberSelector(Selector=CameraIndex)
        -> GroupWorkflow CameraIndex
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="Camera Index: {0}", Selector=it)
            -> WorkflowOutput

        SubscribeSubject CommutatorSettings => #15
        -> MemberSelector(Selector=EnableLed)
        -> GroupWorkflow CommutatorEnableLed
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="Commutator LED Enabled: {0}", Selector=it)
            -> WorkflowOutput
        #15 -> MemberSelector(Selector=Enable)
        -> GroupWorkflow CommutatorEnable
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="Commutator Enabled: {0}", Selector=it)
            -> WorkflowOutput
        #15 -> MemberSelector(Selector=PortName)
        -> GroupWorkflow PortName
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="COM Port: {0}", Selector=it)
            -> WorkflowOutput
        #15 -> MemberSelector(Selector=AutoConnect)
        -> GroupWorkflow AutoConnect
            WorkflowInput Source1 => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=OpenEphys.MiniscopeV4.Gui:Workflows.LogProperty.bonsai, DueTime=PT0S, Format="AutoConnect: {0}", Selector=it)
            -> WorkflowOutput

GroupWorkflow "Save Data"
    GroupWorkflow ButtonPressed => #0
        SubscribeSubject FileSettings
        -> MemberSelector(Selector=RecordingRequested)
        -> DistinctUntilChanged
        -> Condition IsTrue
            WorkflowInput Source1
            -> WorkflowOutput
        -> GroupWorkflow "Miniscope Connected"
            WorkflowInput Source1 => #0
            SubscribeSubject IsAcquiring => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> GroupWorkflow NotTriggerMode
            WorkflowInput Source1 => #0
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingMode) => #2
            #0, #2 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Trigger))
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> WorkflowOutput
    GroupWorkflow TriggerInput => #1
        SubscribeSubject MiniscopeV4Frame
        -> MemberSelector(Selector=DigitalIn) => #1
        SubscribeSubject FileSettings
        -> MemberSelector(Selector=TriggerInput)
        -> DistinctUntilChanged
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #6
        SubscribeSubject FileSettings
        -> MemberSelector(Selector=RecordingRequested)
        -> DistinctUntilChanged
        -> Condition IsTrue
            WorkflowInput Source1
            -> WorkflowOutput
        -> GroupWorkflow MiniscopeConnected
            WorkflowInput Source1 => #0
            SubscribeSubject IsAcquiring => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item2
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Condition "Triggered Mode" => #12
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Trigger))
            -> WorkflowOutput
        #6, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 && it.Item2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    #0, #1 -> Merge
    -> ObserveOn(Scheduler=ThreadPoolScheduler)
    -> Take(Count=1)
    -> GroupWorkflow GenerateFileNames
        WorkflowInput Source1 => #0
        SubscribeSubject FileSettings
        -> MemberSelector(Selector=FileName)
        -> DistinctUntilChanged
        -> PropertyMapping(FileName) => #4
        SubscribeSubject FileSettings
        -> MemberSelector(Selector=Suffix)
        -> DistinctUntilChanged
        -> PropertyMapping(Suffix) => #8
        #0, #4, #8 -> OpenEphys.MiniscopeV4.Gui.GenerateRecordingFileNames(FileName="", Suffix=FileCount) => #9
        -> MemberSelector(Selector=ImageFileName)
        -> BehaviorSubject ImageFileName => #11
        #9 -> MemberSelector(Selector=CsvFileName)
        -> BehaviorSubject CsvFileName => #13
        #9 -> MemberSelector(Selector=LogFileName)
        -> BehaviorSubject LogFileName => #15
        #9 -> MemberSelector(Selector=ConfigFileName)
        -> BehaviorSubject ConfigFileName => #17
        #11, #13, #15, #17 -> Zip
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> MulticastSubject IsRecording
    -> StringProperty
    -> MulticastSubject RecordingError
    -> BooleanProperty(Value=false)
    -> MulticastSubject IsTotalDurationFinished => #11
    SubscribeSubject MiniscopeSettings
    -> MemberSelector(Selector=FrameRate)
    -> DistinctUntilChanged
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32(it.ToString().Substring(3))
    -> PropertyMapping(FrameRate) => #16
    SubscribeSubject FileSettings
    -> MemberSelector(Selector=CompressVideo)
    -> DistinctUntilChanged
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? "MJPG" : "Y800"
    -> PropertyMapping(FourCC) => #21
    SubscribeSubject ImageFileName
    -> PropertyMapping(ImageFileName) => #23
    SubscribeSubject CsvFileName
    -> PropertyMapping(CsvFileName) => #25
    SubscribeSubject LogFileName
    -> PropertyMapping(LogFileName) => #27
    SubscribeSubject ConfigFileName
    -> PropertyMapping(ConfigFilePath) => #29
    #11, #16, #21, #23, #25, #27, #29 -> SelectMany "Save Data"
        SubscribeSubject MiniscopeV4Frame
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnRecording => #1
        GroupWorkflow "Button Stop" => #2
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingRequested)
            -> DistinctUntilChanged
            -> Condition False
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> GroupWorkflow "TriggerInput Stop" => #3
            WorkflowInput Source1
            -> MemberSelector(Selector=DigitalIn) => #1
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=TriggerInput)
            -> DistinctUntilChanged
            -> PropertyMapping(Value) => #5
            #1, #5 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0))
            -> BitwiseNot => #7
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingMode)
            -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Trigger)) => #10
            #7, #10 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
              Expression: it.Item1 && it.Item2
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingRequested) => #14
            #12, #14 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 && it.Item2
            -> Condition True
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        GroupWorkflow "Record Duration Stop" => #4
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingMode)
            -> DistinctUntilChanged
            -> Condition IsSegmentedMode
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #4
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingDuration)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #4, #9 -> Delay(DueTime=PT3S)
            -> WorkflowOutput
        GroupWorkflow "Disconnected Stop" => #5
            SubscribeSubject IsAcquiring
            -> DistinctUntilChanged
            -> Condition False
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        GroupWorkflow "Total Duration Stop" => #6
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingMode)
            -> DistinctUntilChanged
            -> Condition IsSegmentedMode
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> Condition TotalDurationIsTrue => #4
                SubscribeSubject FileSettings
                -> MemberSelector(Selector=SegmentMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
                -> WorkflowOutput
            SubscribeSubject TotalTimeRemaining
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it > 0
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #8
            #4, #8 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true)
            -> MulticastSubject IsTotalDurationFinished
            -> WorkflowOutput
        #2, #3, #4, #5, #6 -> Merge
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject IsRecording
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnRecording => #11
        #1, #11 -> TakeUntil => #12
        SubscribeSubject MiniscopeLog => #13
        ExternalizedMapping(FileName(DisplayName=LogFileName)) => #14
        #12, #13, #14 -> OpenEphys.MiniscopeV4.Gui.WriteLogsToFile(FileName=..\data\test\run_2026-08-14T14_26_50.log)
        -> WorkflowOutput
        ExternalizedMapping(CsvFileName) => #17
        #12, #17 -> GroupWorkflow CsvWriter
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector="FrameNumber,HardwareTime,Quaternion.X,Quaternion.Y,Quaternion.Z,Quaternion.W") => #1
            #0 -> MemberSelector(Selector=DigitalIn) => #2
            -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #3
            #2 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #4
            #1, #3, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1.Item1 as FrameNumber, it.Item1.Item2 as HardwareTime, it.Item1.Item3 as Quaternion_X, it.Item1.Item4 as Quaternion_Y, it.Item1.Item5 as Quaternion_Z, it.Item1.Item6 as Quaternion_W, it.Item2 as DigitalIn0, it.Item3 as DigitalIn1)
            -> Timestamp
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
              Expression: new (it.Value.FrameNumber as FrameNumber, it.Value.HardwareTime as HardwareTime, it.Value.Quaternion_X as Quaternion_X, it.Value.Quaternion_Y as Quaternion_Y, it.Value.Quaternion_Z as Quaternion_Z, it.Value.Quaternion_W as Quaternion_W, it.Value.DigitalIn0 as DigitalIn0, it.Value.DigitalIn1 as DigitalIn1, it.Timestamp as Timestamp)
            ExternalizedMapping(FileName(DisplayName=CsvFileName)) => #9
            #8, #9 -> Bonsai.IO.CsvWriter(FileName=..\data\test\run_2026-08-14T14_26_50.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
            -> WorkflowOutput
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError
        -> Catch
        ExternalizedMapping(FourCC, ImageFileName, FrameRate) => #24
        #12, #24 -> GroupWorkflow VideoWriter
            WorkflowInput Source1
            -> MemberSelector(Selector=Image)
            -> Bonsai.Vision.Grayscale => #2
            ExternalizedMapping(FourCC, FrameRate, FileName(DisplayName=ImageFileName)) => #3
            #2, #3 -> Bonsai.Vision.VideoWriter
              FileName=..\data\test\run_2026-08-14T14_26_50.avi
              Suffix=None
              Buffered=true
              Overwrite=false
              FourCC=Y800
              FrameRate=30
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError
        -> Catch
        #1 -> Take(Count=1)
        -> GroupWorkflow "Log Recording Files" => #32
            WorkflowInput Source1 => #0
            SubscribeSubject ImageFileName => #1
            #0, #1 -> WithLatestFrom
            -> Format(Format="Saving image file: {0}", Selector=Item2) => #3
            SubscribeSubject MiniscopeLog => #4
            #3, #4 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
            -> MemberSelector(Selector=Item1) => #7
            SubscribeSubject CsvFileName => #8
            #7, #8 -> WithLatestFrom
            -> Format(Format="Saving CSV file: {0}", Selector=Item2) => #10
            SubscribeSubject MiniscopeLog => #11
            #10, #11 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
            -> MemberSelector(Selector=Item1) => #14
            SubscribeSubject LogFileName => #15
            #14, #15 -> WithLatestFrom
            -> Format(Format="Saving log file: {0}", Selector=Item2) => #17
            SubscribeSubject MiniscopeLog => #18
            #17, #18 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
            -> WorkflowOutput
        ExternalizedMapping(ConfigFilePath) => #33
        #32, #33 -> GroupWorkflow SerializeConfiguration
            WorkflowInput Source1 => #0
            ExternalizedMapping(ConfigFilePath) => #1
            #0, #1 -> OpenEphys.MiniscopeV4.Gui.ConfigurationRequest(RequestType=ManualSave, ConfigFilePath=..\data\test\run_2026-08-14T14_26_50.yml)
            -> MulticastSubject ConfigRequest
    -> Repeat

    GroupWorkflow StopRecordingOnError
        SubscribeSubject RecordingError
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !string.IsNullOrEmpty(it)
        -> Condition True
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject IsRecording

    GroupWorkflow "Reset Button for Duration"
        SubscribeSubject IsRecording
        -> DistinctUntilChanged
        -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> GroupWorkflow IsSegmentedRecording => #3
            WorkflowInput Source1 => #0
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingMode) => #2
            #0, #2 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.RecordingMode>(Value=Segmented))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> GroupWorkflow AutoRestartIsTrue
            WorkflowInput Source1 => #0
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=SegmentMode) => #2
            #0, #2 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=AutoRestart))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> PublishSubject AutoRestartTriggered
        #3 -> GroupWorkflow TotalDurationIsTrue => #7
            WorkflowInput Source1 => #0
            SubscribeSubject FileSettings => #1
            #0, #1 -> WithLatestFrom
            -> Condition MultipleFiles
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.SegmentMode)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=MultipleFiles))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> GroupWorkflow TotalDurationNotFinished
            WorkflowInput Source1 => #0
            SubscribeSubject IsTotalDurationFinished => #1
            #0, #1 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject AutoRestartTriggered
        -> GroupWorkflow SetTotalTimeRemaining
            WorkflowInput Source1 => #0
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=RecordingDuration) => #2
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: it.Item2
            SubscribeSubject TotalTimeRemaining => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 - it.Item1
            -> MulticastSubject TotalTimeRemaining
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it < 1
            -> Condition LessThanOne
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject IsTotalDurationFinished
        #7 -> GroupWorkflow TotalDurationFinished => #12
            WorkflowInput Source1 => #0
            SubscribeSubject IsTotalDurationFinished => #1
            #0, #1 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #3 -> GroupWorkflow SingleFileIsTrue => #13
            WorkflowInput Source1 => #0
            SubscribeSubject FileSettings
            -> MemberSelector(Selector=SegmentMode) => #2
            #0, #2 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.SegmentMode>(Value=SingleFile))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #12, #13 -> Merge => #14
        BooleanProperty(Value=false)
        -> PropertyMapping(RecordingRequested) => #16
        SubscribeSubject FileSettings => #17
        -> MemberSelector(Selector=RecordingMode)
        -> PropertyMapping(RecordingMode) => #19
        #17 -> MemberSelector(Selector=CompressVideo)
        -> PropertyMapping(CompressVideo) => #21
        #17 -> MemberSelector(Selector=FileName)
        -> PropertyMapping(FileName) => #23
        #17 -> MemberSelector(Selector=Suffix)
        -> PropertyMapping(Suffix) => #25
        #17 -> MemberSelector(Selector=RecordingDuration)
        -> PropertyMapping(RecordingDuration) => #27
        #17 -> MemberSelector(Selector=TriggerInput)
        -> PropertyMapping(TriggerInput) => #29
        #17 -> MemberSelector(Selector=TotalDuration)
        -> PropertyMapping(TotalDuration) => #31
        #17 -> MemberSelector(Selector=SegmentMode)
        -> PropertyMapping(SegmentMode) => #33
        #14, #16, #19, #21, #23, #25, #27, #29, #31, #33 -> OpenEphys.MiniscopeV4.Gui.FileSettings
          RecordingRequested=false
          RecordingMode=Manual
          CompressVideo=false
          FileName=""
          Suffix=FileCount
          RecordingDuration=600
          TotalDuration=3600
          SegmentMode=MultipleFiles
          TriggerInput=DigitalIn0
        -> MulticastSubject FileSettings

    GroupWorkflow "Reset Button On Error"
        SubscribeSubject RecordingError
        -> Condition RecordingError => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        SubscribeSubject MiniscopeError
        -> Condition AcquisitionError => #3
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        #1, #3 -> Merge
        -> GroupWorkflow UpdateFile
            WorkflowInput Source1 => #0
            BooleanProperty(Value=false)
            -> PropertyMapping(RecordingRequested) => #2
            SubscribeSubject FileSettings => #3
            -> MemberSelector(Selector=RecordingMode)
            -> DistinctUntilChanged
            -> PropertyMapping(RecordingMode) => #6
            #3 -> MemberSelector(Selector=CompressVideo)
            -> DistinctUntilChanged
            -> PropertyMapping(CompressVideo) => #9
            #3 -> MemberSelector(Selector=FileName)
            -> DistinctUntilChanged
            -> PropertyMapping(FileName) => #12
            #3 -> MemberSelector(Selector=Suffix)
            -> DistinctUntilChanged
            -> PropertyMapping(Suffix) => #15
            #3 -> MemberSelector(Selector=RecordingDuration)
            -> DistinctUntilChanged
            -> PropertyMapping(RecordingDuration) => #18
            #3 -> MemberSelector(Selector=TriggerInput)
            -> DistinctUntilChanged
            -> PropertyMapping(TriggerInput) => #21
            #3 -> MemberSelector(Selector=TotalDuration)
            -> DistinctUntilChanged
            -> PropertyMapping(TotalDuration) => #24
            #3 -> MemberSelector(Selector=SegmentMode)
            -> DistinctUntilChanged
            -> PropertyMapping(SegmentMode) => #27
            #0, #2, #6, #9, #12, #15, #18, #21, #24, #27 -> OpenEphys.MiniscopeV4.Gui.FileSettings
              RecordingRequested=false
              RecordingMode=Manual
              CompressVideo=false
              FileName=""
              Suffix=FileCount
              RecordingDuration=600
              TotalDuration=3600
              SegmentMode=MultipleFiles
              TriggerInput=DigitalIn0
            -> WorkflowOutput
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> MulticastSubject FileSettings

    GroupWorkflow "Log Recording End"
        SubscribeSubject IsRecording
        -> DistinctUntilChanged
        -> Skip(Count=1)
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value="Stopping recording.") => #4
        SubscribeSubject MiniscopeLog => #5
        #4, #5 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

GroupWorkflow Commutator
    SubscribeSubject CommutatorSettings
    -> MemberSelector(Selector=ConnectionRequested)
    -> DistinctUntilChanged
    -> Condition True
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> ObserveOn(Scheduler=ThreadPoolScheduler)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CommutatorConnected => #7
    SubscribeSubject CommutatorSettings => #8
    -> MemberSelector(Selector=PortName)
    -> DistinctUntilChanged
    -> PropertyMapping(PortName) => #11
    #8 -> MemberSelector(Selector=Enable)
    -> DistinctUntilChanged
    -> PropertyMapping(Enable) => #14
    #8 -> MemberSelector(Selector=EnableLed)
    -> DistinctUntilChanged
    -> PropertyMapping(EnableLed) => #17
    #7, #11, #14, #17 -> SelectMany
        SubscribeSubject MiniscopeV4Frame
        -> MemberSelector(Selector=Quaternion)
        -> ObserveOn(Scheduler=ThreadPoolScheduler) => #2
        ExternalizedMapping(PortName, Enable, EnableLed) => #3
        #2, #3 -> IncludeWorkflow(Path=OpenEphys.Commutator:AutoCommutator.bonsai, PortName=COM3, Enable=true, EnableLed=true) => #4
        SubscribeSubject CommutatorConnected
        -> Condition False => #6
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #4, #6 -> TakeUntil
        -> Materialize => #8
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #8 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
          Expression: "Commutator error: " + it.Exception.Message
        SubscribeSubject MiniscopeLog => #15
        #14, #15 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogError
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject CommutatorError
    -> Repeat

    GroupWorkflow StopOnError
        SubscribeSubject CommutatorError
        -> GroupWorkflow ResetRequest
            WorkflowInput Source1 => #0
            BooleanProperty(Value=false)
            -> PropertyMapping(ConnectionRequested) => #2
            SubscribeSubject CommutatorSettings => #3
            -> MemberSelector(Selector=PortName)
            -> DistinctUntilChanged
            -> PropertyMapping(PortName) => #6
            #3 -> MemberSelector(Selector=Enable)
            -> DistinctUntilChanged
            -> PropertyMapping(Enable) => #9
            #3 -> MemberSelector(Selector=EnableLed)
            -> DistinctUntilChanged
            -> PropertyMapping(EnableLed) => #12
            #3 -> MemberSelector(Selector=AutoConnect)
            -> DistinctUntilChanged
            -> PropertyMapping(AutoConnect) => #15
            #0, #2, #6, #9, #12, #15 -> OpenEphys.MiniscopeV4.Gui.CommutatorSettings(ConnectionRequested=false, PortName=COM3, Enable=true, EnableLed=true, AutoConnect=false)
            -> MulticastSubject CommutatorSettings
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject CommutatorConnected
        -> GroupWorkflow StopAcquisitionIfAutoConnect
            WorkflowInput Source1 => #0
            SubscribeSubject CommutatorSettings
            -> MemberSelector(Selector=AutoConnect) => #2
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it.Item2
            -> GroupWorkflow MiniscopeConnected
                WorkflowInput Source1 => #0
                SubscribeSubject IsAcquiring => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it.Item2
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> ObserveOn(Scheduler=TaskPoolScheduler)
            -> StringProperty(Value="Acquisition stopped because a commutator is required.")
            -> MulticastSubject MiniscopeError
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsAcquiring

    GroupWorkflow StopOnButtonPress
        SubscribeSubject CommutatorSettings
        -> MemberSelector(Selector=ConnectionRequested)
        -> Condition False
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> ObserveOn(Scheduler=TaskPoolScheduler)
        -> MulticastSubject CommutatorConnected

GroupWorkflow "Log Errors"
    SubscribeSubject RecordingError => #0
    SubscribeSubject MiniscopeError => #1
    #0, #1 -> Merge => #2
    SubscribeSubject MiniscopeLog => #3
    #2, #3 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.LogError
